/* This macro should be placed in the ImageJ>macro>toolsets folder so as to appear in the toolbar >> section
* These Click tools creates predefined ROI centered on the point of the Click, add the ROI to the ROI manager and measure features selected in "Analyze > Set Measurements" for this ROI. 
* With stacks it goes automatically to the next slice.
* The dimensions of the ROI can be set by right clicking or double clicking on the tool icon.
* Alternatively one can also use a currently active ROI instead of specifying dimensions, this is useful for freehand and polygon. 
* To do so, activate a roi and click the "Update custom ROI click tool", then select the custom ROI click tool (red ROI button) to generate the "saved roi"
* The ROI set and measurement table should be manually saved after use.   
*
* About the code:
* - 1 macro Tool per click tool
* - 1 associated Option macro (identical name) to set the tool options by right click
* - Tools share common parameters define in get/addDefaultOptions (doNextSlice, measure..)
* - Update custom ROI and Help button are Action Tool
* This code is under BSD-2 licence.
* Author: Laurent Thomas
*/

//----------------- KEYBOARD SHORTCUTS ------------------//
// Macro defining custom keyboard shortcut (key in square-bracket)
// Several shortcut can co-exist, just add a new macro
// NB : With digit key, use the row key at the top of the keyboard (does not work with keypad)
macro "Custom shortcut [1]" {
	// This example makes a stack and a montage of the currently opened images
	// ADD CUSTOM COMMANDS HERE
	N = nImages();
	run("Images to Stack", "name=Stack title=[] use");
	run("Make Montage...", "columns=&N rows=1 scale=1");
}

  // Numeric keypad shortcuts used to set the default ROI group
  macro "Numeric Pad 0 [n0]" { npad(0); }
  macro "Numeric Pad 1 [n1]" { npad(1); }
  macro "Numeric Pad 2 [n2]" { npad(2); }
  macro "Numeric Pad 3 [n3]" { npad(3); }
  macro "Numeric Pad 4 [n4]" { npad(4); }
  macro "Numeric Pad 5 [n5]" { npad(5); }
  macro "Numeric Pad 6 [n6]" { npad(6); }
  macro "Numeric Pad 7 [n7]" { npad(7); }
  macro "Numeric Pad 8 [n8]" { npad(8); }
  macro "Numeric Pad 9 [n9]" { npad(9); }

  function npad(digit) {
      if  (IJ.getFullVersion()>="1.52t"){
		Roi.setDefaultGroup(digit);
		showStatus("Set default Roi group to: " + digit);
	  }
	  else {
		requires("1.52t");
	  }
  }

// ----------- Helper functions -----------------//

// Global variables
var addToManager = true;
var runMeasure = true;
var doNextSlice = true;
var dimension = "time"; //default scrolling dimension for next-slice
var doExtraCmd = false;
var extraCmd = "run('Duplicate...', 'title=crop');";
var leftButton = 16;

function goNextSlice(){
	Stack.getDimensions(stackWidth, stackHeight, channels, slices, frames);
	
	if (slices>1) {
		
		if (Stack.isHyperstack){
			Stack.getPosition(channel, slice, frame);
			
			// Update slide position accordingly (no issue if new value above mex slider position)
			if (dimension=="time") Stack.setFrame(frame+1);
			else if (dimension=="channel") Stack.setChannel(channel+1);
			else if (dimension=="Z-slice") Stack.setSlice(slice+1);
		} 
		else run("Next Slice [>]"); // for 1D stack
	}
}

function roiActions(){
	if (addToManager){
		roiManager("Associate", "true"); // associate ROI with slice (this does not set the Roi position though)
		roiManager("Show All with labels");	
	}
}

/* Move the ROI, as long as the left click is maintained.*/
function moveRoi(){
	
	Roi.getBounds(x, y, width, height) // rectangular bounding box
	getCursorLoc(xcenter, ycenter, z, flags);
	
	while (flags&leftButton!=0) {
		Roi.move(xcenter-width/2, ycenter-height/2); // the top leftpixel of the bounding rectangle is used to position the ROI with move
		wait(25);
		getCursorLoc(xcenter, ycenter, z, flags);
		}
}

/* Add default option to dialog */
function addDefaultOption(){
	
	// Recover previous parameters
	addToManager = call("ij.Prefs.get", "default.addToManager", addToManager);
	runMeasure   = call("ij.Prefs.get", "default.runMeasure", runMeasure);
	doNextSlice  = call("ij.Prefs.get", "default.doNextSlice", doNextSlice);
	dimension    = call("ij.Prefs.get", "default.dimension", dimension);
	doExtraCmd   = call("ij.Prefs.get", "default.doExtraCmd", doExtraCmd);
	extraCmd     = call("ij.Prefs.get", "default.extraCmd", extraCmd);
	
	if (IJ.getFullVersion()>="1.52t") Dialog.addNumber("Current ROI group (or use keypad shortcut)", Roi.getDefaultGroup());
	Dialog.addCheckbox("Add to Roi Manager", addToManager);
	Dialog.addCheckbox("Run measure", runMeasure );
	
	Dialog.addCheckbox("Auto-Next slice", doNextSlice);
	Dialog.addToSameRow();
	Dialog.addChoice("Dimension (for hyperstacks)", newArray("time","channel","Z-slice"), dimension );
	
	Dialog.addCheckbox("Run custom macro-commands", doExtraCmd);
	Dialog.addString("Custom macro-commands", extraCmd, 25);
	
	Dialog.addHelp("https://github.com/LauLauThom/Fiji-RoiClickTools");
	Dialog.addMessage("If you use these tools, please cite:\nThomas, LS; Gehrig, J (2020)\nImageJ/Fiji ROI 1-click tools for rapid manual image annotations and measurements\nmicroPublication Biology - 10.17912/micropub.biology.000215");
}


/* Recover default options from dialog */
function getDefaultOptions(){
	if  (IJ.getFullVersion()>="1.52t"){
		roiGroup = Dialog.getNumber();
		Roi.setDefaultGroup(roiGroup);
	}
	
	addToManager = Dialog.getCheckbox();
	runMeasure   = Dialog.getCheckbox();
	doNextSlice  = Dialog.getCheckbox();
	dimension    = Dialog.getChoice();
	doExtraCmd   = Dialog.getCheckbox();
	extraCmd     = Dialog.getString(); 
	
	call("ij.Prefs.set", "default.addToManager", addToManager);
	call("ij.Prefs.set", "default.runMeasure", runMeasure);
	call("ij.Prefs.set", "default.doNextSlice", doNextSlice);
	call("ij.Prefs.set", "default.dimension", dimension);
	call("ij.Prefs.set", "default.doExtraCmd", doExtraCmd);
	call("ij.Prefs.set", "default.extraCmd", extraCmd);
}

/* Default actions, in this order: AddToManager, runMeasure, doNextSlice, customAction and select None  */
// Issue with stack and extra command crop : if NextSlice then crop, wrong 
function defaultActions(){
	if (nSlices>1){
			Stack.getPosition(channel, slice, frame);
			if (IJ.getFullVersion()<"1.52r") showMessage("The ROI slice-position is not saved when annotating stacks with this version of ImageJ, update to min 1.52r");
			else Roi.setPosition(channel, slice, frame); // important otherwise the roi have position None
	}
	if (addToManager) roiManager("Add");
	if (runMeasure)   run("Measure");
	
	// Get the current image title to be able to select back the initial image after the extraCommand, which might have selected another image
	imageName = getTitle();
	if (doExtraCmd) eval(extraCmd);
	/*
	* MORE CUSTOM COMMANDS (executed upon Click with any of the tool, even if the tick box is not ticked)
	* Examples (remove the //, save the file and relaunch fiji to test it)
	*/
	//run("Duplicate...", " ");
	//run("Invert", "slice");
	
	selectImage(imageName); // select back initial image, before calling next slice
	
	if (doNextSlice) goNextSlice();    // only if doNextSlice is True
	//run("Select None"); // Deselect last drawn ROI - commented: if not adding to ROI Manager then ROI not visible at all !

}

// --------------- CLICK-TOOLS ---------//

// -------------- Point  --------------- //
//Not provided already available in built-in imageJ


// -------------- Line  --------------- //

// Initalize variables (global such that the option macro can change it)
var lineLength  = 100;
var lineAngle  = 45; // trigo orientation
 
macro "Line Click Tool - Cf00Lff11" {
	
	getCursorLoc(xcenter, ycenter, z, flags); 
	//print("Sample: "+x+" "+y); 

	if ((flags==16)|(flags == 48)){  // 16 : left Click or 48 = 16 + 32 Left-Click + in a ROI
		x1 = xcenter - cos(PI/180 * lineAngle) * lineLength/2;
		y1 = ycenter + sin(PI/180 * lineAngle) * lineLength/2;
		
		x2 = xcenter + cos(PI/180 * lineAngle) * lineLength/2;
		y2 = ycenter - sin(PI/180 * lineAngle) * lineLength/2;
		
		roiActions();
		makeLine(x1, y1, x2, y2);
		moveRoi();
		defaultActions();
	}
}	


macro "Line Click Tool Options" { 
	Dialog.create("Line Click tool options");

	// recover previously typed values
	lineLength = call("ij.Prefs.get", "line.length", 200); // default 200
	lineAngle  = call("ij.Prefs.get", "line.angle", 0);  // default 0
	
	Dialog.addNumber("Length (pixels): ", lineLength);
	Dialog.addNumber("Angle (degrees, counter-clockwise): ", lineAngle);
	addDefaultOption();
	Dialog.show();
	
	lineLength  = Dialog.getNumber();
	lineAngle   = Dialog.getNumber();
	getDefaultOptions(); //Update the global variables addToManager, runMeasure, doNextSlice 

	// Save entered value
	call("ij.Prefs.set", "line.length", lineLength);
	call("ij.Prefs.set", "line.angle", lineAngle);
}


// -------------------- Circle ---------------- //
var radius = 50; 

macro "Circle Click Tool - Cf00O11cc" {
	
	getCursorLoc(x, y, z, flags); 
	//print("Sample: "+x+" "+y); 

	if ((flags==16)|(flags == 48)){ 					  // 16 : left Click or 48 = 16 + 32 Left-Click + in a ROI
		roiActions();
		makeOval(x-radius, y-radius, 2*radius, 2*radius); // Draw the circle of given radius using the points from ROI manager as center
		moveRoi();
		defaultActions();
	}
}	

macro "Circle Click Tool Options" { 
   Dialog.create("Circle Click tool options")
   
   // recover previously typed values
   radius = call("ij.Prefs.get", "circle.radius", 200); // default 200
   
   Dialog.addNumber("Radius (pixels)", radius);
   addDefaultOption();
   Dialog.show();
   
   radius = Dialog.getNumber();
   getDefaultOptions(); //Update the global variables addToManager, runMeasure, doNextSlice 
   
   // Save typed value
   	call("ij.Prefs.set", "circle.radius", radius);

  } 
  

/*
// Commented, rotated rectangle replace it

// ------------------ Rectangle ------------------------- //

// Initalize variables (global such that the option macro can change it)
var rectWidth  = 10;
var rectHeight = 10;

macro "Rectangle Click Tool - Cf00R11cc" {
	roiManager("Associate", "true"); // associate ROI with slice
	roiManager("Show All with labels");	
	
	getCursorLoc(xcenter, ycenter, z, flags); 
	//print("Sample: "+x+" "+y); 

	if ((flags==16)|(flags == 48)){  // 16 : left Click or 48 = 16 + 32 Left-Click + in a ROI
		xcorner = xcenter - rectWidth/2;
		ycorner = ycenter - rectHeight/2;
		
		makeRectangle(xcorner, ycorner, rectWidth, rectHeight); // Create a rectangular Roi centered on the point clicked
		
		defaultActions();
		
		   // Deselect last drawn ROI
	}
}	


macro "Rectangle Click Tool Options" { 
	Dialog.create("Rectangle Click tool options");
	Dialog.addNumber("Width: ", rectWidth);
	Dialog.addNumber("Height: ", rectHeight);
	
	addDefaultOption();

	Dialog.show();
	
	rectWidth  = Dialog.getNumber();
	rectHeight = Dialog.getNumber();
	
	getDefaultOptions();
	

}
*/


// -------------- Rotated Rectangle --------------- //

// Initalize variables (global such that the option macro can change it)
var rotRectWidth  = 100;
var rotRectHeight = 50;
var rotRectAngle  = 0; // trigo orientation
 
macro "Rotated Rectangle Click Tool - Cf00R11cc" {
	
	getCursorLoc(xcenter, ycenter, z, flags); 
	//print("Sample: "+x+" "+y); 

	if ((flags==16)|(flags == 48)){  // 16 : left Click or 48 = 16 + 32 Left-Click + in a ROI
		
		if (rotRectAngle==0){
			xcorner = xcenter - rotRectWidth/2;
			ycorner = ycenter - rotRectHeight/2;
			
			roiActions();
			makeRectangle(xcorner, ycorner, rotRectWidth, rotRectHeight);
			moveRoi();
			defaultActions();
		}
		
		else{
			
			x1 = xcenter - cos(PI/180 * rotRectAngle) * rotRectWidth/2;
			y1 = ycenter + sin(PI/180 * rotRectAngle) * rotRectWidth/2;
			
			x2 = xcenter + cos(PI/180 * rotRectAngle) * rotRectWidth/2;
			y2 = ycenter - sin(PI/180 * rotRectAngle) * rotRectWidth/2;
			
			roiActions();
			makeRotatedRectangle(x1, y1, x2, y2, rotRectHeight);
			moveRoi();
			defaultActions();
		}
	}
}	


macro "Rotated Rectangle Click Tool Options" { 
	Dialog.create("Rotated Rectangle Click tool options");
	
	// Recover saved parameters
	rotRectWidth  = call("ij.Prefs.get", "rect.width", 200);  // default 200
    rotRectHeight = call("ij.Prefs.get", "rect.height", 100); // default 100
	rotRectAngle  = call("ij.Prefs.get", "rect.angle", 0);    // default 0
	
	Dialog.addNumber("Width (pixels): ", rotRectWidth);
	Dialog.addNumber("Height (pixels): ", rotRectHeight);
	Dialog.addNumber("Angle (degrees, counter-clockwise): ", rotRectAngle);
	addDefaultOption();
	Dialog.show();
	
	rotRectWidth  = Dialog.getNumber();
	rotRectHeight = Dialog.getNumber();
	rotRectAngle  = Dialog.getNumber();
	getDefaultOptions(); //Update the global variables addToManager, runMeasure, doNextSlice 
	
	// Save entered variables
	call("ij.Prefs.set", "rect.width", rotRectWidth);
	call("ij.Prefs.set", "rect.height", rotRectHeight);
	call("ij.Prefs.set", "rect.angle", rotRectAngle);
}



// -------------- Ellipse  --------------- //

// Initalize variables (global such that the option macro can change it)
var ellipseWidth  = 100;
var ellipseHeight = 50;
var ellipseAngle  = 0; // trigo orientation
 
macro "Ellipse Click Tool - Cf00O11fa" {
	
	getCursorLoc(xcenter, ycenter, z, flags); 
	//print("Sample: "+x+" "+y); 

	if ((flags==16)|(flags == 48)){  // 16 : left Click or 48 = 16 + 32 Left-Click + in a ROI
		x1 = xcenter - cos(PI/180 * ellipseAngle) * ellipseWidth/2;
		y1 = ycenter + sin(PI/180 * ellipseAngle) * ellipseWidth/2;
		
		x2 = xcenter + cos(PI/180 * ellipseAngle) * ellipseWidth/2;
		y2 = ycenter - sin(PI/180 * ellipseAngle) * ellipseWidth/2;
		
		roiActions();
		makeEllipse(x1, y1, x2, y2, ellipseHeight/ellipseWidth);
		moveRoi();
		defaultActions();
	}
}	


macro "Ellipse Click Tool Options" { 
	Dialog.create("Ellipse Click tool options");
	
	// Recover saved values
	ellipseWidth  = call("ij.Prefs.get", "ellipse.width", 200);  // default 200
    ellipseHeight = call("ij.Prefs.get", "ellipse.height", 100); // default 100
	ellipseAngle  = call("ij.Prefs.get", "ellipse.angle", 0);    // default 0
	
	Dialog.addNumber("Width (pixels): ", ellipseWidth);
	Dialog.addNumber("Height (pixels): ", ellipseHeight);
	Dialog.addNumber("Angle (degrees, counter-clockwise): ", ellipseAngle);
	addDefaultOption();
	Dialog.show();
	
	ellipseWidth  = Dialog.getNumber();
	ellipseHeight = Dialog.getNumber();
	ellipseAngle  = Dialog.getNumber();
	getDefaultOptions(); //Update the global variables addToManager, runMeasure, doNextSlice 
	
	// Save entered values
	call("ij.Prefs.set", "ellipse.width", ellipseWidth);
	call("ij.Prefs.set", "ellipse.height", ellipseHeight);
	call("ij.Prefs.set", "ellipse.angle", ellipseAngle);
}


// ----------------- Custom ROI Tool ---------- //
var xoffset = newArray(1); // single point init to 0
var yoffset = newArray(1);
var type=0;
var width=200;
var height=200;

macro "Update custom ROI Click Action Tool - C070D06D15D16D24D25D26D27D28D29D2aD33D34D35D36D37D3bD3cD42D43D44D45D46D47D48D4cD4dDb1Db2Db6Db7Db8Db9DbaDbbDbcDc2Dc3Dc7Dc8Dc9DcaDcbDd4Dd5Dd6Dd7Dd8Dd9DdaDe8De9Df8CabcD05D14D17D18D19D1aD23D2bD2cD32D3dD41D51D52D53D54D55D56D57D58Da6Da7Da8Da9DaaDabDacDadDbdDc1DccDd2Dd3DdbDe4De5De6De7DeaDf9"{
	// this macro "save" the current Roi upon click on the toolbar icon
	
	type = selectionType();
	if (type==-1) exit("Draw or activate a ROI first"); // No roi defined
	
	// Compute center of line or polygon as center of bounding-box
	Roi.getBounds(x, y, width, height);
	xcenter = x+width/2;
	ycenter = y+height/2;
	
	if ( (type==0) || (type==1) ){ // Rectangle or Oval
		xoffset = newArray(1); // single top-left corner point
		yoffset = newArray(1);
		xoffset[0] = x - xcenter;
		yoffset[0] = y - ycenter;
	}
	
	else{
		// Get roi coordinates and compute coordinates compared to bbox-center
		Roi.getCoordinates(xpoints, ypoints);
		size = Roi.size();
		xoffset = newArray(size); // offset compared to center
		yoffset = newArray(size);
		for (i=0; i<size; i++){
			xoffset[i] = xpoints[i] - xcenter;
			yoffset[i] = ypoints[i] - ycenter;
		}
	}
}


macro "Custom ROI Click Tool - C070T0d15RT8c12oTfc12i" {
	
	getCursorLoc(xcenter, ycenter, z, flags); 
	
	size = xoffset.length;
	xpoints = newArray(size); // contains the new ROI points
	ypoints = newArray(size); 
	
	if ((flags==16)|(flags == 48)){  // 16 : left Click or 48 = 16 + 32 Left-Click + in a ROI
		roiActions();
		
		for (i=0; i<size; i++){
			xpoints[i] = xcenter + xoffset[i]; // x-coordinates
			ypoints[i] = ycenter + yoffset[i]; // y-coordinates
		}
		
		if (type==0) makeRectangle(xpoints[0], ypoints[0], width, height);
		else if (type==1) makeOval(xpoints[0], ypoints[0], width, height);
		else if (type==2) makeSelection("polygon", xpoints, ypoints);
		else if (type==3) makeSelection("freehand", xpoints, ypoints);
		else if (type==5) makeLine(xpoints[0], ypoints[0], xpoints[1], ypoints[1]);
		else if (type==6) makeSelection("polyline", xpoints, ypoints);
		else if (type==7) makeSelection("freeline", xpoints, ypoints);
		else if (type==8) makeSelection("angle", xpoints, ypoints);
		else makeSelection("polygon", xpoints, ypoints);
		
		moveRoi();
		defaultActions();
	}
}

macro "Custom ROI Click Tool Options" {
	Dialog.create("Custom ROI Click Tool options");
	addDefaultOption();
	Dialog.show();
	
	getDefaultOptions(); //Update the global variables addToManager, runMeasure, doNextSlice 
}


macro "Online documentation and source code Action Tool - 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"{
	exec("open", "https://github.com/LauLauThom/Fiji-RoiClickTools")
	}